PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = lms
  consoleLoggingLevel = error
  expName = testAdapt3
  keyboardBackend = PsychToolbox
  logging level = error
  runMode = 0
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Routines
  Routine init
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        tfAdapt=5
        offsetXDeg=4
        radiusDeg=2.5
        adaptDur=8
        testDur=4
        refCont=.4
        matchCont=.4
        longAdaptDur=10
        AdaptCont=0.8
  Routine adapt
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    PolygonComponent circleL
      colorSpace = lms
      durationEstim = 6
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (-offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptDur
      units = deg
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    PolygonComponent circleR
      colorSpace = lms
      durationEstim = 6
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptDur
      units = deg
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    GratingComponent grating
      color [set every repeat] = $[Adapt_Lcomp,Adapt_Mcomp,Adapt_Scomp]
      colorSpace = lms
      contrast [set every frame] = sin(t*2*pi*tfAdapt)*Adapt_MaxCont*AdaptCont
      durationEstim = 6
      mask = circle
      pos [set every repeat] = (offsetXDeg, 0)
      sf = 0.0001
      size [set every repeat] = (radiusDeg*2,radiusDeg*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptDur
      tex = sin
      units = cm
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    TextComponent fixation
      durationEstim = 6
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptDur
      text = x
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        matchCont=random(1)

        thisExp.addData('matchContInit', matchCont)
  Routine test
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    PolygonComponent circleR_test
      colorSpace = lms
      durationEstim = 3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = testDur
      units = deg
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    PolygonComponent circleL_test
      colorSpace = lms
      durationEstim = 3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (-offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = testDur
      units = deg
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    GratingComponent test_2
      color [set every repeat] = $[Lcomp,Mcomp,Scomp]
      colorSpace = lms
      contrast [set every frame] = matchCont*MaxCont*sin(t*2*pi*tfAdapt)
      durationEstim = 6
      mask = circle
      pos [set every repeat] = (-offsetXDeg,0)
      sf = 0.001
      size = (radiusDeg*2,radiusDeg*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = testDur
      tex = sin
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    GratingComponent reference
      color [set every repeat] = $[Lcomp,Mcomp,Scomp]
      colorSpace = lms
      contrast [set every frame] = refCont*MaxCont*sin(t*2*pi*tfAdapt)
      durationEstim = 6
      mask = circle
      pos [set every repeat] = (offsetXDeg,0)
      sf = 0.001
      size [set every repeat] = (radiusDeg*2,radiusDeg*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = testDur
      tex = sin
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    TextComponent fixPoint2
      color = black
      durationEstim = 6
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = testDur
      text = x
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        # React to responses by updating contrast
        key = event.getKeys(keyList=['up', 'down'])
        if key and key[0] == 'down' and not matchCont < 0.05:  # if left key is pressed, change contrast if wouldn't exceed the possible values
            matchCont -= 0.05
        elif key and key[0] == 'up' and not matchCont > 0.9:  # same here...
            matchCont += 0.05

        thisExp.addData('matchCont', matchCont)
      End Routine:
        thisExp.addData('finalMatchCont', matchCont)
  Routine getReady
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    PolygonComponent circleR_2
      colorSpace = lms
      durationEstim = .5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = deg
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    PolygonComponent circleLReady
      colorSpace = lms
      durationEstim = .5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (-offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      units = deg
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    TextComponent getReadyToMatch
      durationEstim = .5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = o
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  Routine longAdapt
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    PolygonComponent adaptCircleR
      colorSpace = lms
      durationEstim = 30
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = longAdaptDur
      units = deg
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    PolygonComponent adaptCircleL
      colorSpace = lms
      durationEstim = 30
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1,-1,-1
      pos = (-offsetXDeg,0)
      shape = circle
      size = (radiusDeg*2.1,radiusDeg*2.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = longAdaptDur
      units = deg
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    GratingComponent longAdaptGrting
      color [set every repeat] = $[Adapt_Lcomp,Adapt_Mcomp,Adapt_Scomp]
      colorSpace = lms
      contrast [set every frame] = sin(t*2*pi*tfAdapt)*Adapt_MaxCont*AdaptCont
      durationEstim = 30
      mask = circle
      pos [set every repeat] = (offsetXDeg, 0)
      sf = 0.0001
      size [set every repeat] = (radiusDeg*2,radiusDeg*2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = longAdaptDur
      tex = sin
      units = cm
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    TextComponent longAdaptFix
      durationEstim = 30
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = longAdaptDur
      text = x
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  Routine begin_2
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    TextComponent beginText
      letterHeight = 2
      startVal [time (s)] = 0.0
      text = Press space to begin
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = adaptConds.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Adapt_Lcomp', np.int64(1)), ('Adapt_Mcomp', np.int64(1)), ('Adapt_Scomp', np.int64(1)), ('Adapt_MaxCont', np.float64(1.0))]),
      OrderedDict([('Adapt_Lcomp', np.int64(1)), ('Adapt_Mcomp', np.int64(-1)), ('Adapt_Scomp', np.int64(0)), ('Adapt_MaxCont', np.float64(0.07))]),
      OrderedDict([('Adapt_Lcomp', np.int64(0)), ('Adapt_Mcomp', np.int64(0)), ('Adapt_Scomp', np.int64(1)), ('Adapt_MaxCont', np.float64(0.7))])]
    Routine begin_2
    Routine longAdapt
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conds.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('Lcomp', np.int64(1)), ('Mcomp', np.int64(1)), ('Scomp', np.int64(1)), ('MaxCont', np.float64(1.0))]),
        OrderedDict([('Lcomp', np.int64(1)), ('Mcomp', np.int64(-1)), ('Scomp', np.int64(0)), ('MaxCont', np.float64(0.07))]),
        OrderedDict([('Lcomp', np.int64(0)), ('Mcomp', np.int64(0)), ('Scomp', np.int64(1)), ('MaxCont', np.float64(0.7))])]
      Routine adapt
      Routine getReady
      Routine test
      Routine getReady
    LoopTerminator trials
  LoopTerminator trials_2
